PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'group': "['A', 'B']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = psychopy
  keyboardBackend = ioHub
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Routines
  Routine Consent
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ConsentText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your participation in this study is completely voluntary. Your responses will be kept anonymous and confidential. Additionally, any personal information you submit will be kept private as well. In this particular experiment, you will be asked to determine whether a presented image represents an animate or inanimate entity. This research involves no more risk than encountered in everyday life. There is also no direct benefit for you to participate in this study, beyond the compensation agreed upon with the lab. Please note whether you consent to participate in this survey down below.

        Press space bar to continue.
  Routine Welcome
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This particular experiment aims to measure each participant’s level of prosociality. It is part of a broader experiment designed to increase levels of prosociality through mindfulness meditation interventions.

        Press space bar to continue.
    VariableComponent fontsize
      startExpValue = 0.05
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  Routine StudyTrial
    TextComponent text
      color [set every repeat] = $WordColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $WordItem
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  Routine Blank500
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine ImageStudyTrial
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_7
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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    JoystickComponent joystick
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      timeRelativeTo = joystick onset
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  Routine GeneralInstructions
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent InstructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This experiment involves the use of image stimuli and a joystick. You will be presented with an image that will be either animate or inanimate. If an image has both animate and inanimate beings, then mark the image as animate. Inanimate images will have no animate objects within it.
        Note that for the purpose of this experiment, “animate” generally refers to living things, such as humans or animals. However, plants and trees will be considered inanimate, along with desks, cars, and so on. Please use your best judgment if this distinction seems unclear for any of the images.

        Press space bar to continue.
  Routine Rest
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Rest period.

        Press space bar to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ImageTests1
    ImageComponent image_2
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    KeyboardComponent key_resp_9
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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    JoyButtonsComponent button_resp
      allowedKeys = 0,1,2,3,4
      deviceNumber = 0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    JoystickComponent joystick_4
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      timeRelativeTo = joystick onset
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        my_xpositions_o = []
        my_ypositions_o = []
        my_times_o = []
      Each Frame:
        myx_o = joystick.getX()
        myy_o = joystick.getY()
        myt_o = joystick.joystickClock.getTime()


        my_xpositions_o.append(myx_o)
        my_ypositions_o.append(myy_o)
        my_times_o.append(myt_o)
      End Routine:
        trialsOriginal.addData("joystick.x_o", my_xpositions_o)
        trialsOriginal.addData("joystick.y_o", my_ypositions_o)
        trialsOriginal.addData("joystick.t_o", my_times_o)
  Routine PracticeInstructions1
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next, you will begin the practice trial for this phase. Please push the joystick AWAY from you if you believe the image to be ANIMATE, or pull the joystick TOWARDS you if you believe the image to be INANIMATE. Next, you will begin the practice trial for this phase.

        Press space bar to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestInstructions1
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be presented with the official images that will be used for data collection in this phase. Please inform the researcher if you have any questions thus far.

        Press space bar to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GeneralInstructions2
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be instructed whether to push the joystick AWAY from you for animate or pull it TOWARDS you for animate (along with the instructions for inanimate images, which will be opposite that for animate images) before each phase of the experiment. There will be two phases of the experiment, with each phase containing a total of 90 images–10 of which will be practice images presented before the data collection begins. Please push or pull as quickly as possible, as your reaction time will be measured.

        Press space bar to continue.
  Routine ImageTest2
    KeyboardComponent key_resp_10
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_3
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine ImageTest3
    KeyboardComponent key_resp_11
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_4
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine ImageTest4
    KeyboardComponent key_resp_12
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_5
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine StudyTrial2
    KeyboardComponent key_resp_14
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent image_7
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    JoystickComponent joystick_2
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      timeRelativeTo = joystick onset
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  Routine PracticeInstructions2
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next, you will begin the practice trial for this phase. “Please push the joystick AWAY from you if you believe the image to be INANIMATE, or pull the joystick TOWARDS you if you believe the image to be ANIMATE. Next, you will begin the practice trial for this phase”.

        Press space bar to continue.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestInstructions2
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be presented with the official images that will be used for data collection in this phase. Please inform the researcher if you have any questions thus far.

        Press space bar to continue.
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ImageTest5
    KeyboardComponent key_resp_16
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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    ImageComponent image_6
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    JoystickComponent joystick_3
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      timeRelativeTo = joystick onset
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        my_xpositions_r = []
        my_ypositions_r = []
        my_times_r = []
      Each Frame:
        myx_r = joystick.getX()
        myy_r = joystick.getY()
        myt_r = joystick.joystickClock.getTime()

        my_xpositions_r.append(myx_r)
        my_ypositions_r.append(myy_r)
        my_times_r.append(myt_r)
      End Routine:
        trialsOriginal.addData("joystick.x_r", my_xpositions_r)
        trialsOriginal.addData("joystick.y_r", my_ypositions_r)
        trialsOriginal.addData("joystick.t_r", my_times_r)
  Routine ImageTest6
    KeyboardComponent key_resp_17
      allowedKeys = '1', '2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_8
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine ImageTest7
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  Routine ImageTest8
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  Routine End_Experiment
    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment has now ended.

         As noted earlier, this particular experiment aims to measure each participant’s level of prosociality. That was done by measuring the reaction time difference between how long it takes for each participant to push for certain images and to pull for certain other images, as organized by animate/inanimate status and valence. It is part of a broader experiment designed to increase levels of prosociality through mindfulness meditation interventions.

        Thank you for being part of the experiment, and please feel free to contact the researcher if you have any further questions.
Flow
  Routine Welcome
  Routine Blank500
  Routine Consent
  Routine Blank500
  Routine GeneralInstructions
  Routine Blank500
  Routine GeneralInstructions2
  Routine Blank500
  LoopInitiator controlTaskOrder loopType="TrialHandler"
    conditionsFile = $'conditions'+expInfo['group']+'.xlsx'
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator part1 loopType="TrialHandler"
      loopType = random
      nReps = nRepsTask1
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      Routine PracticeInstructions1
      LoopInitiator trialsStudyImages loopType="TrialHandler"
        Selected rows = 0:10
        conditionsFile = ImagePractices1.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Goat 1.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Happy face 2.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Lion 1.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Monkey 1.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Dog 12.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Gun 5.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Money 1.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Office supplies 4.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Sidewalk 3.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Storage 1.jpg', 'AnimateInanimate': 2}]
        Routine ImageStudyTrial
        Routine Blank500
      LoopTerminator trialsStudyImages
      Routine TestInstructions1
      LoopInitiator trialsOriginal loopType="TrialHandler"
        Selected rows = 0:80
        conditionsFile = Original_Compiled_IAT.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Dirt 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 1.6168, 'Rand': 0.6695803900912131},
          {'ImageFile': 'Images/Destruction 5.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.1143, 'Rand': 0.6225236117358539},
          {'ImageFile': 'Images/Tornado 4.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.7192, 'Rand': 0.04515441392123898},
          {'ImageFile': 'Images/Frustrated pose 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.3937, 'Rand': 0.7929639094339582},
          {'ImageFile': 'Images/Cat 5.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.1842, 'Rand': 0.2993849771344371},
          {'ImageFile': 'Images/Scared face 3.jpg', 'AnimateInanimate': 1, 'ValenceScore': 3.0377, 'Rand': 0.39989359561204807},
          {'ImageFile': 'Images/Gun 10.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.5934, 'Rand': 0.8397215898320197},
          {'ImageFile': 'Images/Jail 5.jpg', 'AnimateInanimate': 2, 'ValenceScore': 3.0599, 'Rand': 0.07486446158300541},
          {'ImageFile': 'Images/Rainbow 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.2286, 'Rand': 0.6276019931043489},
          {'ImageFile': 'Images/Destruction 10.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.0682, 'Rand': 0.33267433135769797},
          {'ImageFile': 'Images/Frustrated pose 5.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.481, 'Rand': 0.28553188401789653},
          {'ImageFile': 'Images/Dog 19.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.9814, 'Rand': 0.7804812252252693},
          {'ImageFile': 'Images/War 8.jpg', 'AnimateInanimate': 1, 'ValenceScore': 1.7473, 'Rand': 0.10290094730872323}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
        Routine ImageTests1
        Routine Blank500
      LoopTerminator trialsOriginal
    LoopTerminator part1
    LoopInitiator part2 loopType="TrialHandler"
      loopType = random
      nReps = nRepsTask2
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      Routine PracticeInstructions2
      LoopInitiator trialsStudyImages2 loopType="TrialHandler"
        Selected rows = 0:10
        conditionsFile = ImagePractices2_inherently_reversed.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Surprise 2.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Tiger 2.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Shark 7.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Sad face 1.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Pigeon 4.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Yarn 4.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Wedding 7.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Storage 3.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Socks 1.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Rocks 3.jpg', 'AnimateInanimate': 1}]
        Routine StudyTrial2
        Routine Blank500
      LoopTerminator trialsStudyImages2
      Routine TestInstructions2
      LoopInitiator trialsReversed loopType="TrialHandler"
        Selected rows = 0:80
        conditionsFile = Reversed_Compiled_IAT.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Dirt 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 1.6168, 'Rand': 0.06853202818535975},
          {'ImageFile': 'Images/Destruction 5.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.1143, 'Rand': 0.2570234643667684},
          {'ImageFile': 'Images/Tornado 4.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.7192, 'Rand': 0.35882841291674683},
          {'ImageFile': 'Images/Frustrated pose 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.3937, 'Rand': 0.7197407902889942},
          {'ImageFile': 'Images/Cat 5.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.1842, 'Rand': 0.9954257341646925},
          {'ImageFile': 'Images/Scared face 3.jpg', 'AnimateInanimate': 2, 'ValenceScore': 3.0377, 'Rand': 0.8892379777884233},
          {'ImageFile': 'Images/Gun 10.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.5934, 'Rand': 0.5526612727945294},
          {'ImageFile': 'Images/Jail 5.jpg', 'AnimateInanimate': 1, 'ValenceScore': 3.0599, 'Rand': 0.31125348095634753},
          {'ImageFile': 'Images/Rainbow 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.2286, 'Rand': 0.6206583722842239},
          {'ImageFile': 'Images/Destruction 10.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.0682, 'Rand': 0.8776428714390194},
          {'ImageFile': 'Images/Frustrated pose 5.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.481, 'Rand': 0.6171253093911958},
          {'ImageFile': 'Images/Dog 19.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.9814, 'Rand': 0.10803629375699186},
          {'ImageFile': 'Images/War 8.jpg', 'AnimateInanimate': 2, 'ValenceScore': 1.7473, 'Rand': 0.5530710944545294}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
        Routine ImageTest5
        Routine Blank500
      LoopTerminator trialsReversed
    LoopTerminator part2
  LoopTerminator controlTaskOrder
  Routine End_Experiment
